PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'learning_type': 'motor', 'seqID': '1', 'debug': '1'}
  Full-screen window = True
  Monitor = mylaptop57cm
  Screen = 1
  Units = deg
  Use version = 2023.2.3
  Window size (pixels) = [1463, 823]
  expName = ASRT_percept
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent arrowhead
      fillColor [set every repeat] = $arrow_color
      opacity = 0.5
      ori [set every repeat] = orientation_degrees
      shape = arrow
      size = (3,3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','space','up','down','left','right'
      correctAns = $correct_answer_direction
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    TextComponent correct_key
      disabled = True
      letterHeight = 2
      pos = (0, -8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $correct_answer_direction
  Routine welcomescreen
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    ImageComponent spaceship
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent welcometext
      color = cyan
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        歡迎參加這個實驗！

        請您以上下左右四個按鍵操控一艘太空船，
        請依螢幕中央顯示箭號所指方向，
        按下相對應方向的按鍵

        答錯會在凝視點下方出現 X
        未作答會在凝視點下方出現 ！

        準備好請按任意鍵開始…
    KeyboardComponent welcome_end
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent preplist
      Code Type = Both
      Begin Experiment:
        import numpy as np
        import pandas as pd
        from geneseq import TripletSequenceGenerator

        seq_canon = {
        '1':[0,1,2,3], '2':[1,3,2,0],
        '3':[2,1,3,0], '4':[3,1,0,2],
        '5':[0,3,1,2], '6':[2,1,0,3]
        }

        predefined_sequence = seq_canon[expInfo['seqID']]
        generator = \
            TripletSequenceGenerator(
                predefined_sequence, display_info=False
            )

        # Experiment setup: gather participant ID and learning condition type
        participant_id = expInfo['participant']
        #participant_id = 'test'
        #learning_condition_id = expInfo['learning_type']

        # Define experiment parameters
        repetitions_per_block = 10
        number_of_learning_blocks = 20
        number_of_practice_blocks = 5
        number_of_motortesting_blocks = 5
        number_of_percepttesting_blocks = 5

        if expInfo['debug'] == 0:
            answers_str = np.array(['4', '3', '2', '1'])
        else:
            answers_str = np.array(['up', 'right', 'down', 'left'])


        ## perceptual
        #answers_str[pattern_seq] is the original mapping of responses to sti sequence
        #i.e., 1, 4, 2, 3 or left, up, down, right
        #pattern_seq = [3, 0, 2, 1]

        #after 90 deg cw rotation up, right, left, down
        #answers_str[pattern_seq_cw90] is the cw90 mapping of response to sti sequence
        #pattern_seq_cw90 = [0, 1, 3, 2]


        # Lists to store filenames of generated sequence files
        learning_sequence_files = []
        practice_sequence_files = []
        motortesting_sequence_files = []
        percepttesting_sequence_files = []
        # Generate learning sequences
        for block_index in range(number_of_learning_blocks):

            # Generate an initial random sequence for the first 5 trials
            initial_random_trials = np.random.randint(0, 4, 5).tolist()



            # Interleave the ordered and shuffled sequences, prepend the initial random trials
            generator.generate(iterations = 1000)
            learning_sequence = np.array(initial_random_trials + generator.final_sequence)
            learning_sequence_cw90 = generator.cw90(learning_sequence)

            # Create arrow head color seq
            arrow_col = np.empty(len(learning_sequence), dtype=object)
            arrow_col[:len(initial_random_trials)] = ["red"] * len(initial_random_trials)
            arrow_col[len(initial_random_trials)::2] = "white"
            arrow_col[len(initial_random_trials)+1::2] = "red"
            # Map sequence indices to answer directions
            learning_sequence_answers_str = answers_str[learning_sequence_cw90]


            # Save the learning sequence to a CSV file
            learning_sequence_df = pd.DataFrame({
                'orientation_degrees': learning_sequence * 90,
                'orientation_index': learning_sequence,
                'correct_answer_index': learning_sequence_cw90,
                'correct_answer_direction': learning_sequence_answers_str,
                'arrow_color':arrow_col
            })
            learning_filename = f'sequences/{participant_id}_learning_sequence_{block_index:02}.csv'
            learning_sequence_df.to_csv(learning_filename, index=False)
            learning_sequence_files.append(learning_filename)

        # Save filenames of learning sequences to an Excel file
        df_learning_files = pd.DataFrame({'learning_seq_files': learning_sequence_files})
        df_learning_files.to_excel(f'sequences/learning_sequence_file_list.xlsx', index=False)

        # Generate practice sequences



        for block_index in range(number_of_practice_blocks):
            practice_sequence = np.random.randint(0, 4, 85)
            practice_sequence_cw90 = generator.cw90(practice_sequence)
            practice_sequence_answers_str = answers_str[practice_sequence_cw90]

            # Save the practice sequence to a CSV file
            practice_sequence_df = pd.DataFrame({
                'orientation_degrees': practice_sequence * 90,
                'orientation_index': practice_sequence,
                'correct_answer_index': practice_sequence_cw90,
                'correct_answer_direction': practice_sequence_answers_str,
                'arrow_color':['red'] * len(practice_sequence)
            })
            practice_filename = f'sequences/{participant_id}_practice_sequence_{block_index:02}.csv'
            practice_sequence_df.to_csv(practice_filename, index=False)
            practice_sequence_files.append(practice_filename)

        # Save filenames of practice sequences to an Excel file
        df_practice_files = pd.DataFrame({'practice_seq_files': practice_sequence_files})
        df_practice_files.to_excel(f'sequences/practice_sequence_file_list.xlsx', index=False)

        # Generate and save an initial random block of 85 trials
        initial_random_sequence = np.random.randint(0, 4, 85)
        initial_random_answers_directions = answers_str[initial_random_sequence]
        initial_random_sequence_df = pd.DataFrame({
            'orientation_index': initial_random_sequence,
            'orientation_degrees': initial_random_sequence * 90,
            'correct_answer_index': initial_random_sequence,
            'correct_answer_direction': initial_random_answers_directions,
            'arrow_color': ["red"] * len(initial_random_sequence)
        })
        # Convert correct_answer_direction to string
        initial_random_sequence_df.to_csv(f'sequences/{participant_id}_initial_random.csv', index=False)

        # Save the filename of the initial random sequence to an Excel file
        df_initial_random_files = pd.DataFrame({'initial_random_seq_files': [f'sequences/{participant_id}_initial_random.csv']})
        df_initial_random_files.to_excel('sequences/init_random_sequence_file_list.xlsx', index=True)

        # Generate motor testing sequences
        for block_index in range(number_of_motortesting_blocks):

            # Generate an initial random sequence for the first 5 trials
            initial_random_trials = np.random.randint(0, 4, 5).tolist()

            # Interleave the ordered and shuffled sequences, prepend the initial random trials
            generator.generate(iterations = 1000)
            motortesting_sequence = np.array(initial_random_trials + generator.final_sequence)

            motortesting_sequence_cw90 = generator.cw90(motortesting_sequence)
            # Map sequence indices to answer directions
            motortesting_sequence_answers = motortesting_sequence_cw90
            motortesting_sequence_answers_str = answers_str[motortesting_sequence_cw90]

            # Create arrow head color seq
            arrow_col = np.empty(len(motortesting_sequence), dtype=object)
            arrow_col[:len(initial_random_trials)] = ["red"] * len(initial_random_trials)
            arrow_col[len(initial_random_trials)::2] = "white"
            arrow_col[len(initial_random_trials)+1::2] = "red"


            # Save the testing sequence to a CSV file
            motortesting_sequence_df = pd.DataFrame({
                'orientation_degrees': motortesting_sequence_cw90 * 90,
                'orientation_index': motortesting_sequence_cw90,
                'correct_answer_index': motortesting_sequence_answers,
                'correct_answer_direction': motortesting_sequence_answers_str,
                'arrow_color': arrow_col
            })
            motortesting_filename = f'sequences/{participant_id}_motortesting_sequence_{block_index:02}.csv'
            motortesting_sequence_df.to_csv(motortesting_filename, index=False)
            motortesting_sequence_files.append(motortesting_filename)

        # Save filenames of testing sequences to an Excel file
        df_motortesting_files = pd.DataFrame({'motor_testing_seq_files': motortesting_sequence_files})
        df_motortesting_files.to_excel(f'sequences/motor_testing_sequence_file_list.xlsx', index=False)

        # Generate perceptual testing sequences
        for block_index in range(number_of_percepttesting_blocks):

            # Generate an initial random sequence for the first 5 trials
            initial_random_trials = np.random.randint(0, 4, 5).tolist()

            # Interleave the ordered and shuffled sequences, prepend the initial random trials
            generator.generate(iterations = 1000)
            percepttesting_sequence = np.array(initial_random_trials + generator.final_sequence)
            # Create arrow head color seq
            arrow_col = np.empty(len(percepttesting_sequence), dtype=object)
            arrow_col[:len(initial_random_trials)] = ["red"] * len(initial_random_trials)
            arrow_col[len(initial_random_trials)::2] = "white"
            arrow_col[len(initial_random_trials)+1::2] = "red"

            # Map sequence indices to answer directions
            percepttesting_sequence_answers = percepttesting_sequence
            percepttesting_sequence_answers_str = answers_str[percepttesting_sequence]

            # Save the testing sequence to a CSV file
            percepttesting_sequence_df = pd.DataFrame({
                'orientation_degrees': percepttesting_sequence * 90,
                'orientation_index': percepttesting_sequence,
                'correct_answer_index': percepttesting_sequence_answers,
                'correct_answer_direction': percepttesting_sequence_answers_str,
                'arrow_color': arrow_col
            })
            percepttesting_filename = f'sequences/{participant_id}_percepttesting_sequence_{block_index:02}.csv'
            percepttesting_sequence_df.to_csv(percepttesting_filename, index=False)
            percepttesting_sequence_files.append(percepttesting_filename)

        # Save filenames of testing sequences to an Excel file
        df_percepttesting_files = pd.DataFrame({'percept_testing_seq_files': percepttesting_sequence_files})
        df_percepttesting_files.to_excel(f'sequences/percept_testing_sequence_file_list.xlsx', index=False)
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine pratice_instruction
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    ImageComponent spaceship_rotated
      flipVert = True
      image = images/spaceship.jpg
      opacity = 0.3
      ori = -45
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent rotation_instruction
      color = cyan
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        現在因為方向控制系統故障，
        太空船產生逆時鐘90度的方向偏誤，
        您必須選擇顯示箭號順時鐘旋轉90度後之按鍵：

        看到↑，請按→
        看到→，請按↓
        看到↓，請按←
        看到←，請按↑

        答錯會在凝視點下方出現 X
        未作答會在凝視點下方出現 ！

        準備好請按任意鍵繼續…
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'up','left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent participantID
      disabled = True
      letterHeight = 3
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $expInfo['participant'] 
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    CodeComponent pre_prac
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
  Routine thankyouscreen
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    TextComponent text
      color = cyan
      font = DFKai-SB
      letterHeight = 3
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        實驗已完成，謝謝您的參與！
        請等待實驗者的進一步導引。
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_section
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    CodeComponent performance_pre_section
      Code Type = Auto->JS
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      Begin Routine:
        bkNum += 1
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
    PolygonComponent fixation_init
      fillColor = white
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine post_section
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    CodeComponent performance_post_section
      Code Type = Py
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      Begin Experiment:
        import numpy as np
      Begin Routine:
        if len(bkRT) < 1:
            bkRT.append(0)
        if bkTrialNum < 1:
            bkTrialNum = 1

        bkRTmean = np.round(np.mean(bkRT)*1000, 0)
        bkACC = np.round(bkCorrectNum / bkTrialNum * 100)
        bkRTmeanstr = f"平均反應時間：{bkRTmean}ms"
        bkACCstr = f"正確率：{bkACC}%"
        sentence1 = "您在這一個段落的表現："
        sentence2 = "請按任意鍵繼續…"

        this_feedbacktext = \
        f"""
        {sentence1}
        {bkRTmeanstr}
        {bkACCstr}
        {sentence2}
        """
    TextComponent feedback_post_section
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $this_feedbacktext
      wrapWidth = 30
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine motor_testing_instruction
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    ImageComponent spaceship3
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent motor_testing_instruction_text
      color = cyan
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        現在太空船已維修好正常運作，
        請您依箭頭所指方向按下反應鍵，
        不要再選擇旋轉後的方向。

        準備好請按任意鍵繼續…
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent pre_motor_testing
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
  Routine fixation
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    PolygonComponent cross_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 8
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == str(correct_answer_direction):
            feedbackstr ="正確"
            bkCorrectNum += 1
        else:
            feedbackstr = "錯誤"

        bkRT.append(key_resp.rt)
        bkTrialNum+=1
  Routine percept_testing_instruction
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    ImageComponent spaceship4
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent percept_testing_instruction_text
      color = cyan
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        請您繼續依箭頭所指方向按下反應鍵。
        此段落作答後不會有回饋。

        準備好請按任意鍵繼續…
    CodeComponent pre_percept
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine seqreport
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    KeyboardComponent seq_report_key
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent arrow_report_check
      Code Type = Auto->JS
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      Begin Experiment:
        arrow_report_ori = 45
        report_orientations = {
        '4':0, '3':90, '2':180, '1':270
        }
      End Routine:
        arrow_report_ori = report_orientations[seq_report_key.keys]
  Routine seqarrow
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    PolygonComponent arrow_report
      fillColor = white
      ori [set every repeat] = arrow_report_ori
      shape = arrow
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine learning_instruction
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    ImageComponent spaceship_rotated01
      flipVert = True
      image = images/spaceship.jpg
      opacity = 0.3
      ori = -45
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent rotation_instruction01
      color = cyan
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 100
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      text:
        現在開始正式測驗，過程中不會有任何反饋，每一題之間

        會出現一個十字凝視點後，才會有下一題，

        請看清楚箭頭的方向後，盡你所能的快做出反應，

        答錯會在凝視點下方出現 X
        未作答會在凝視點下方出現 ！

        每一區塊結束時都會出現，當前的正確率及反應時間

        請按任意鍵繼續...
    KeyboardComponent key_resp_02
      allowedKeys = 'space', 'up','left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent participantID_same
      disabled = True
      letterHeight = 3
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = $expInfo['participant'] 
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    CodeComponent pre_learning
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
  Routine section_pause
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    TextComponent section_pause_text
      letterHeight = 3
      pos = (-10, 0)
      startVal [time (s)] = 0.0
      text = 按空白鍵繼續回答箭號方向…
      wrapWidth = 20
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    KeyboardComponent section_pause_keys
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparing_screen
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    TextComponent text_4
      font = DFKai-SB
      letterHeight = 3
      pos = (-15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 實驗材料準備中，請稍候…
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  Routine seqreport_instruction
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    TextComponent seqreport_instruction_text
      color = yellow
      font = DFKai-SB
      letterHeight = 3
      pos = (-15, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      wrapWidth = 20
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      text:
        請依時間順序按出白色箭頭方向
        請按空白鍵繼續…
    KeyboardComponent seqreport_instruction_key
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RSI
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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  Routine fixation_feedback
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    PolygonComponent cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        feedbackstr=""
      Begin Routine:
        if key_resp.keys == str(correct_answer_direction):
            #feedbackstr = f"correct: response: {key_resp.keys}  correct key: {correct_answer_direction}"
            #feedbackstr = "正確"
            feedbackstr = ""
            bkRT.append(key_resp.rt)
            bkCorrectNum += 1
        elif key_resp.keys == None:
            feedbackstr = '!'

        else:
            feedbackstr = 'X'
            #feedbackstr = f"wrong: response: {key_resp.keys} correct key:{correct_answer_direction}"
            #feedbackstr = f"{type(key_resp.keys)} {type(correct_answer_direction)}"
            #feedbackstr = f"錯誤"



        bkTrialNum+=1
    TextComponent feedback_text
      letterHeight = 3
      pos = (0, -8)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 60
      text [set every repeat] = $feedbackstr
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  Routine pre_exp_pause
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    CodeComponent pre_exp_settings
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
Flow
  Routine welcomescreen
  LoopInitiator init_random_block loopType="TrialHandler"
    conditions = [{'initial_random_seq_files': 'sequences/817500_initial_random.csv'}]
    conditionsFile = sequences/init_random_sequence_file_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine pre_section
    LoopInitiator init_random_trials loopType="TrialHandler"
      Selected rows = 0:8
      conditionsFile = $initial_random_seq_files
      loopType = sequential
      nReps = 1
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      conditions:
        [{'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'}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
      Routine trial
      Routine fixation_feedback
      Routine RSI
    LoopTerminator init_random_trials
    Routine post_section
  LoopTerminator init_random_block
  Routine pratice_instruction
  LoopInitiator practice_blocks loopType="TrialHandler"
    conditionsFile = sequences/practice_sequence_file_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practice_seq_files': 'sequences/817500_practice_sequence_00.csv'},
      {'practice_seq_files': 'sequences/817500_practice_sequence_01.csv'},
      {'practice_seq_files': 'sequences/817500_practice_sequence_02.csv'},
      {'practice_seq_files': 'sequences/817500_practice_sequence_03.csv'},
      {'practice_seq_files': 'sequences/817500_practice_sequence_04.csv'}]
    Routine pre_section
    LoopInitiator practice_trials loopType="TrialHandler"
      Selected rows = 0:8
      conditionsFile = $practice_seq_files
      loopType = random
      nReps = 1
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      Routine trial
      Routine fixation_feedback
      Routine RSI
    LoopTerminator practice_trials
    Routine post_section
  LoopTerminator practice_blocks
  Routine learning_instruction
  LoopInitiator learning_trials loopType="TrialHandler"
    conditionsFile = sequences/learning_sequence_file_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [{'learning_seq_files': 'sequences/886082_learning_sequence_00.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_01.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_02.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_03.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_04.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_05.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_06.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_07.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_08.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_09.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_10.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_11.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_12.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_13.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_14.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_15.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_16.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_17.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_18.csv'},
      {'learning_seq_files': 'sequences/886082_learning_sequence_19.csv'}]
    Routine pre_section
    LoopInitiator learning_loop loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = $learning_seq_files
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)])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
      Routine trial
      Routine fixation_feedback
      Routine RSI
    LoopTerminator learning_loop
    Routine seqreport_instruction
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine seqreport
      Routine seqarrow
    LoopTerminator trials
    Routine post_section
  LoopTerminator learning_trials
  Routine percept_testing_instruction
  LoopInitiator percept_testing_trials loopType="TrialHandler"
    conditionsFile = sequences/percept_testing_sequence_file_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'percept_testing_seq_files': 'sequences/278857_percepttesting_sequence_00.csv'},
      {'percept_testing_seq_files': 'sequences/278857_percepttesting_sequence_01.csv'},
      {'percept_testing_seq_files': 'sequences/278857_percepttesting_sequence_02.csv'},
      {'percept_testing_seq_files': 'sequences/278857_percepttesting_sequence_03.csv'},
      {'percept_testing_seq_files': 'sequences/278857_percepttesting_sequence_04.csv'}]
    Routine pre_section
    LoopInitiator percept_testing_loop loopType="TrialHandler"
      Selected rows = 0:8
      conditionsFile = $percept_testing_seq_files
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine fixation
      Routine RSI
    LoopTerminator percept_testing_loop
    Routine post_section
  LoopTerminator percept_testing_trials
  Routine thankyouscreen
